<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.HamamatsuCamera;assembly=AllenNeuralDynamics.HamamatsuCamera"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.HamamatsuCamera.Nodes;assembly=AllenNeuralDynamics.HamamatsuCamera"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:p5="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Subject" />
        <Property Name="ChunkSize" />
        <Property Name="Value" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Subject" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai">
              <RootFolder>C:/output_data</RootFolder>
              <Subject>000000</Subject>
              <DateTimeOffset>0001-01-01T00:00:00.0000000+00:00</DateTimeOffset>
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ChannelCount</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ChunkSize" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="p1:TiffWriter,sys:Nullable(sys:Int32)">
              <MemberName>ChunkSize</MemberName>
              <Value>1000</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TiffChunkSize</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SettingsPath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="LookupTablePath" />
              <Property Name="SettingsPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:C13440">
                <p2:Regions>
                  <p2:RegionOfInterest>
                    <p2:X>28</p2:X>
                    <p2:Y>841</p2:Y>
                    <p2:Width>1976</p2:Width>
                    <p2:Height>236</p2:Height>
                  </p2:RegionOfInterest>
                </p2:Regions>
                <p2:CropMode>Auto</p2:CropMode>
                <p2:EnableBundling>false</p2:EnableBundling>
                <p2:BundleSize>1</p2:BundleSize>
                <p2:SettingsPath>C:\local-HSFP\20260112_C13440Config_V4-beta_extTrig.xml</p2:SettingsPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:Frames" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FrameCounter</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChannelCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:UInt64">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChannelCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="BufferSize" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>FrameStreams</Name>
              <rx:BufferSize>5</rx:BufferSize>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Processing">
                <p2:DeinterleaveCount>5</p2:DeinterleaveCount>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingRootPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p4:AppendModalitySuffix">
                <p4:Modality>Fib</p4:Modality>
              </Combinator>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/session_params_.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CsvWriter">
                <p2:FileName>C:/output_data/000000/000000_20260206T112956\fib/session_params_.csv</p2:FileName>
                <p2:Suffix>Timestamp</p2:Suffix>
                <p2:Overwrite>false</p2:Overwrite>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="12" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="12" To="17" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>IsTeensyReady</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Teensy</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:CreateSerialPort">
                <port:Name>Teensy</port:Name>
                <port:PortName>COM7</port:PortName>
                <port:BaudRate>9600</port:BaudRate>
                <port:NewLine>\r\n</port:NewLine>
                <port:Parity>None</port:Parity>
                <port:ParityReplace>63</port:ParityReplace>
                <port:DataBits>8</port:DataBits>
                <port:StopBits>One</port:StopBits>
                <port:Handshake>None</port:Handshake>
                <port:DiscardNull>false</port:DiscardNull>
                <port:DtrEnable>true</port:DtrEnable>
                <port:RtsEnable>false</port:RtsEnable>
                <port:ReadBufferSize>4096</port:ReadBufferSize>
                <port:WriteBufferSize>2048</port:WriteBufferSize>
                <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialReadLine">
                <port:PortName>Teensy</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TeensyEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TeensyEvents</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>s</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsTeensyReady</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>SendToTeensy</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>Teensy</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>q</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SendToTeensy</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>s</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SendToTeensy</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>c</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SendToTeensy</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IsTeensyReady</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:Unit">
        <rx:Name>EndExperiment</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>s</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SendToTeensy</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualizer.bonsai">
        <Channel0>
          <Rect>
            <X>1492</X>
            <Y>53</Y>
            <Width>147</Width>
            <Height>53</Height>
          </Rect>
          <Rect>
            <X>1504</X>
            <Y>130</Y>
            <Width>135</Width>
            <Height>48</Height>
          </Rect>
        </Channel0>
        <Channel1>
          <Rect>
            <X>890</X>
            <Y>66</Y>
            <Width>324</Width>
            <Height>41</Height>
          </Rect>
          <Rect>
            <X>908</X>
            <Y>141</Y>
            <Width>300</Width>
            <Height>37</Height>
          </Rect>
        </Channel1>
        <Channel2>
          <Rect>
            <X>572</X>
            <Y>66</Y>
            <Width>383</Width>
            <Height>53</Height>
          </Rect>
          <Rect>
            <X>572</X>
            <Y>143</Y>
            <Width>383</Width>
            <Height>50</Height>
          </Rect>
        </Channel2>
        <Channel3>
          <Rect>
            <X>548</X>
            <Y>64</Y>
            <Width>306</Width>
            <Height>41</Height>
          </Rect>
          <Rect>
            <X>536</X>
            <Y>140</Y>
            <Width>317</Width>
            <Height>49</Height>
          </Rect>
        </Channel3>
        <Channel4>
          <Rect>
            <X>436</X>
            <Y>62</Y>
            <Width>265</Width>
            <Height>58</Height>
          </Rect>
          <Rect>
            <X>454</X>
            <Y>145</Y>
            <Width>241</Width>
            <Height>52</Height>
          </Rect>
        </Channel4>
      </Expression>
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:Visible>true</ui:Visible>
        <ui:Location xsi:nil="true" />
        <ui:Size xsi:nil="true" />
        <ui:WindowState xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="15" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>